PsychoPy2experiment version="2023.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = False memory-final Proj- Vrinda Chachan
  keyboardBackend = ioHub
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Routines
  Routine Welcome_Begin_screen
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Experiment
        Take A Look At The Words Displayed
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Instructions
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  Routine study_trial__words_
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    TextComponent Study_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $study_words
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  Routine Test_Instructions_2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Get Ready For The Test
        Press Y for Words You think were presented and N for not presented
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine study_trial_Images
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    ImageComponent image
      image = C:/Users/Vrinda Chachan/OneDrive/Desktop/false memory images/sleeping-brain.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_2
      image = C:/Users/Vrinda Chachan/OneDrive/Desktop/false memory images/th (1).jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [time (s)] = 5
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    ImageComponent image_3
      image = C:/Users/Vrinda Chachan/OneDrive/Desktop/false memory images/th.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 6
      stopVal [time (s)] = 8
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  Routine Test_Trial
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $study_words
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End_Screen
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank You For Participating
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Flow
  Routine Welcome_Begin_screen
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study words final list- false alarm exp.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'night'},
      {'study_words': 'bed'},
      {'study_words': 'rest'},
      {'study_words': 'nap'},
      {'study_words': 'snooze'},
      {'study_words': 'pillow'},
      {'study_words': 'snore'},
      {'study_words': 'Alarm'},
      {'study_words': 'Stars '}]
    Routine study_trial__words_
  LoopTerminator trials
  Routine study_trial_Images
  Routine Test_Instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test words final list false alarm EXP.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_words': 'night', 'Correct_answer': 'y'},
      {'study_words': 'bed', 'Correct_answer': 'y'},
      {'study_words': 'rest', 'Correct_answer': 'y'},
      {'study_words': 'nap', 'Correct_answer': 'y'},
      {'study_words': 'snooze', 'Correct_answer': 'y'},
      {'study_words': 'pillow', 'Correct_answer': 'y'},
      {'study_words': 'snore', 'Correct_answer': 'y'},
      {'study_words': 'alarm', 'Correct_answer': 'y'},
      {'study_words': 'stars', 'Correct_answer': 'y'},
      {'study_words': 'sleep', 'Correct_answer': 'n'},
      {'study_words': 'dream', 'Correct_answer': 'n'},
      {'study_words': 'dark', 'Correct_answer': 'n'},
      {'study_words': 'midnight', 'Correct_answer': 'n'},
      {'study_words': 'clock', 'Correct_answer': 'n'}]
    Routine Test_Trial
  LoopTerminator trials_2
  Routine End_Screen
